PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = test1
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    PolygonComponent fix2
      fillColor = white
      stopVal [duration (s)] = .5
      pos [set every frame] = $locfix2
      units = cm
      lineColor = grey
      startVal [time (s)] = 2.75
      nVertices = 90
      size = [0.3, 0.3]
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    PolygonComponent fix1
      fillColor = white
      stopVal [duration (s)] = .5
      pos [set every frame] = $locfix1
      units = cm
      lineColor = grey
      startVal [time (s)] = 2
      nVertices = 90
      size = [0.3, 0.3]
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    PolygonComponent fixate
      fillColor = white
      stopVal [duration (s)] = .5
      units = cm
      lineColor = grey
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.3, 0.3]
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    PolygonComponent one
      fillColor [set every frame] = $col1
      stopVal [duration (s)] = 1.5
      pos [set every frame] = $loc1
      units = cm
      lineColor = grey
      startVal [time (s)] = .5
      size = [0.6, 0.6]
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    PolygonComponent two
      fillColor [set every frame] = $col2
      stopVal [duration (s)] = 1.5
      pos [set every frame] = $loc2
      units = cm
      lineColor = grey
      ori = 1
      startVal [time (s)] = .5
      size = [0.6, 0.6]
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    PolygonComponent three
      fillColor [set every frame] = $col3
      stopVal [duration (s)] = 1.5
      pos [set every frame] = $loc3
      units = cm
      lineColor = grey
      startVal [time (s)] = .5
      size = [0.6, 0.6]
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    PolygonComponent four
      fillColor [set every frame] = $col4
      stopVal [duration (s)] = 1.5
      pos [set every frame] = $loc4
      units = cm
      lineColor = grey
      startVal [time (s)] = .5
      size = [0.6, 0.6]
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    PolygonComponent test
      fillColor [set every frame] = $testColour
      pos [set every frame] = $testLocation
      units = cm
      lineColor = grey
      startVal [time (s)] = 3.5
      size = [0.6, 0.6]
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','down','up'
      startVal [time (s)] = 3.5
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  Routine instruct
    TextComponent instruction
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        This trail will begin with a fixation point marked with 'x' and be followed by a brief presentation of four different coloured squares. The squares will then disappear, and after a brief delay, one of the squares will reappear having changed location along one axis from its previous location in the group presentation.

        Your task is to indicate the direction of that single square's move (from its previous location in the group presentation) by pressing either 'up', 'down', 'left', or 'right' arrow keys on the keyboard as soon as you can.  Repeat this process until the trail is complete.

        Press 'enter' to begin.
    KeyboardComponent start
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine finish
    TextComponent Thanks
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Task complete.
        Thank you for your time.
Flow
  Routine instruct
  LoopInitiator task loopType="TrialHandler"
    conditionsFile = VWM_coordinates.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'testColour': u'blue', u'col4': u'yellow', u'locfix1': [0, 1], u'col2': u'green', u'col3': u'red', u'col1': u'blue', u'loc2': [0, -1], u'loc3': [1, 0], u'loc1': [0, 1], u'corrAns': u'down', u'loc4': [1, 1], u'locfix4': [1, 1], u'locfix5': [1, -1], u'locfix2': [0, -1], u'testLocation': [0, -1], u'locfix3': [1, 0]},
      {u'testColour': u'blue', u'col4': u'blue', u'locfix1': [0, -1], u'col2': u'red', u'col3': u'yellow', u'col1': u'green', u'loc2': [1, 0], u'loc3': [1, 1], u'loc1': [0, -1], u'corrAns': u'up', u'loc4': [1, -1], u'locfix4': [1, -1], u'locfix5': [-1, 0], u'locfix2': [1, 0], u'testLocation': [1, 1], u'locfix3': [1, 1]},
      {u'testColour': u'blue', u'col4': u'green', u'locfix1': [1, 0], u'col2': u'yellow', u'col3': u'blue', u'col1': u'red', u'loc2': [1, 1], u'loc3': [1, -1], u'loc1': [1, 0], u'corrAns': u'left', u'loc4': [-1, 0], u'locfix4': [-1, 0], u'locfix5': [-1, 1], u'locfix2': [1, 1], u'testLocation': [0, -1], u'locfix3': [1, -1]},
      {u'testColour': u'blue', u'col4': u'red', u'locfix1': [1, 1], u'col2': u'blue', u'col3': u'green', u'col1': u'yellow', u'loc2': [1, -1], u'loc3': [-1, 0], u'loc1': [1, 1], u'corrAns': u'left', u'loc4': [-1, 1], u'locfix4': [-1, 1], u'locfix5': [-1, -1], u'locfix2': [1, -1], u'testLocation': [-1, -1], u'locfix3': [-1, 0]}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
    Routine trial
  LoopTerminator task
  Routine finish
